PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['VPN-Code'], expName, expInfo['date'])
  Experiment info = {'VPN-Code': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = MST_Aphantasia
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Routines
  Routine Ende_Experiment
    TextComponent bye
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Teilnahme!

        Bitte bearbeiten Sie auch den dritten Teil des Experiments.

        Zum Beenden des zweiten Teils drücken Sie bitte die Leertaste, dann können Sie das Fenster schließen.
    KeyboardComponent key_resp_Ende
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        bye.alignText = 'left'
  Routine Lern
    ImageComponent Lernbilder
      image [set every repeat] = $old_pics
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    TextComponent fixationskreuz1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Test
    ImageComponent Testbilder
      image [set every repeat] = $test_pics
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    KeyboardComponent answer_mst
      allowedKeys = 'v','b','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
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    TextComponent toolate
      letterHeight = 0.1
      startVal [time (s)] = 5.5
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      text:
        Das war leider zu langsam.

        Sie haben 5 Sekunden Zeit, um eine Antwort zu geben.
    KeyboardComponent weiter_toolate
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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    TextComponent hinweis
      letterHeight = 0.05
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3.0
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      text:
        Bitte Antworten

        Gelerntes Bild         = V
        Ähnliches Bild        = B
        Unbekanntest Bild = N
    TextComponent fixationskreuz2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Instruktionen_Test
    TextComponent start_mst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Testphase

        Nun werden Ihnen erneut Bilder nacheinander gezeigt.
        Nach jeden Bild geben Sie bitte an, ob es sich um ein …

        … bekanntes Bild handelt (Taste v).
        … ähnliches Bild handelt (Taste b).
        … neues Bild handelt (Taste n).

        Um die Testphase zu starten, drücken Sie bitte die Leertaste.
    KeyboardComponent Start_Test
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent align5
      Code Type = Auto->JS
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      Begin Experiment:
        start_mst.alignText = 'left'
  Routine beispiel
    TextComponent beispielMST
      letterHeight = 0.035
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        Während Ihnen ein Bild gezeigt wird, entscheiden Sie per Tastendruck, ob dieses Bild
        - ein gelerntes Bild ist = Taste V
        - einem gelernten Bild ähnlich ist = Taste B
        - ein unbekanntes Bild ist = Taste N

        Für Ihre Antwort haben Sie 5 Sekunden Zeit.

        Um die Lernphase zu starten, drücken Sie bitte die Leertaste.
    KeyboardComponent weiter4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent align4
      Code Type = Auto->JS
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      Begin Experiment:
        beispielMST.alignText = 'left'
    ImageComponent beispiel_mst
      image = D:\MASTERARBEIT\Abbildungen\MST_Beispiel.JPG
      pos = (0, 0.2)
      size = (0.798, 0.429)
      startVal [time (s)] = 0.0
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  Routine Begrüßung
    TextComponent hallo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen zum zweiten Teil dieser Studie!

        Hier wird in einem Experiment Ihr bildliches Gedächtnis untersucht. Dafür werden Ihnen Bilder von alltäglichen Objekten gezeigt, die Sie sich bitte merken und später wiedererkennen sollen.

        Bitte nutzen Sie keine Hilfsmittel, sondern nur Ihr Gedächtnis!

        Für WEITER drücken Sie bitte die Leertaste.
    KeyboardComponent weiter1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent align1
      Code Type = Auto->JS
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      Begin Experiment:
        hallo.alignText = 'left'
  Routine instruktion_1
    TextComponent instruktion1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In diesem Abschnitt wird Ihr bildliches Gedächtnis untersucht, er besteht aus zwei Phasen: einer Lernphase und einer Testphase.

        In der Lernphase werden Ihnen insgesamt 64 Bilder gezeigt, die Sie sich so gut wie möglich einprägen sollen.

        Für WEITER drücken Sie bitte die Leertaste.
    KeyboardComponent weiter2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent align2
      Code Type = Auto->JS
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      Begin Experiment:
        instruktion1.alignText = 'left'
  Routine instruktion_2
    TextComponent instruktion2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In der Testphase werden Ihnen Bilder gezeigt, die entweder
        - genau die Bilder sind, die Sie zuvor in der Lernphase gesehen haben.
        - den Bildern aus der Lernphase ähnlich sind.
        - oder gänzlich neue Bilder sind.

        Für WEITER drücken Sie bitte die Leertaste.
    CodeComponent align3
      Code Type = Auto->JS
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      Begin Experiment:
        instruktion2.alignText = 'left'
    KeyboardComponent weiter3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Begrüßung
  Routine instruktion_1
  Routine instruktion_2
  Routine beispiel
  LoopInitiator Lernphase loopType="TrialHandler"
    conditionsFile = Lernphase_MST.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'old_pics': '004a'},
      {'old_pics': '005a'},
      {'old_pics': '007a'},
      {'old_pics': '008a'},
      {'old_pics': '009a'},
      {'old_pics': '010a'},
      {'old_pics': '011a'},
      {'old_pics': '012a'},
      {'old_pics': '017a'},
      {'old_pics': '018a'},
      {'old_pics': '019a'},
      {'old_pics': '024a'},
      {'old_pics': '025a'},
      {'old_pics': '029a'},
      {'old_pics': '030a'},
      {'old_pics': '033a'},
      {'old_pics': '044a'},
      {'old_pics': '045a'},
      {'old_pics': '050a'},
      {'old_pics': '058a'},
      {'old_pics': '060a'},
      {'old_pics': '063a'},
      {'old_pics': '066a'},
      {'old_pics': '071a'},
      {'old_pics': '076a'},
      {'old_pics': '079a'},
      {'old_pics': '080a'},
      {'old_pics': '087a'},
      {'old_pics': '094a'},
      {'old_pics': '096a'},
      {'old_pics': '098a'},
      {'old_pics': '101a'},
      {'old_pics': '105a'},
      {'old_pics': '110a'},
      {'old_pics': '111a'},
      {'old_pics': '113a'},
      {'old_pics': '117a'},
      {'old_pics': '118a'},
      {'old_pics': '119a'},
      {'old_pics': '120a'},
      {'old_pics': '121a'},
      {'old_pics': '126a'},
      {'old_pics': '133a'},
      {'old_pics': '137a'},
      {'old_pics': '138a'},
      {'old_pics': '139a'},
      {'old_pics': '140a'},
      {'old_pics': '142a'},
      {'old_pics': '143a'},
      {'old_pics': '144a'},
      {'old_pics': '146a'},
      {'old_pics': '148a'},
      {'old_pics': '153a'},
      {'old_pics': '155a'},
      {'old_pics': '156a'},
      {'old_pics': '164a'},
      {'old_pics': '168a'},
      {'old_pics': '170a'},
      {'old_pics': '175a'},
      {'old_pics': '180a'},
      {'old_pics': '182a'},
      {'old_pics': '183a'},
      {'old_pics': '184a'},
      {'old_pics': '187a'}]
    Routine Lern
  LoopTerminator Lernphase
  Routine Instruktionen_Test
  LoopInitiator Testphase loopType="TrialHandler"
    conditionsFile = Testphase_MST.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_pics': '005a', 'answer': 'v'},
      {'test_pics': '011a', 'answer': 'v'},
      {'test_pics': '012a', 'answer': 'v'},
      {'test_pics': '017a', 'answer': 'v'},
      {'test_pics': '018a', 'answer': 'v'},
      {'test_pics': '019a', 'answer': 'v'},
      {'test_pics': '033a', 'answer': 'v'},
      {'test_pics': '044a', 'answer': 'v'},
      {'test_pics': '050a', 'answer': 'v'},
      {'test_pics': '058a', 'answer': 'v'},
      {'test_pics': '060a', 'answer': 'v'},
      {'test_pics': '066a', 'answer': 'v'},
      {'test_pics': '076a', 'answer': 'v'},
      {'test_pics': '094a', 'answer': 'v'},
      {'test_pics': '098a', 'answer': 'v'},
      {'test_pics': '105a', 'answer': 'v'},
      {'test_pics': '113a', 'answer': 'v'},
      {'test_pics': '118a', 'answer': 'v'},
      {'test_pics': '119a', 'answer': 'v'},
      {'test_pics': '126a', 'answer': 'v'},
      {'test_pics': '133a', 'answer': 'v'},
      {'test_pics': '138a', 'answer': 'v'},
      {'test_pics': '140a', 'answer': 'v'},
      {'test_pics': '142a', 'answer': 'v'},
      {'test_pics': '144a', 'answer': 'v'},
      {'test_pics': '146a', 'answer': 'v'},
      {'test_pics': '153a', 'answer': 'v'},
      {'test_pics': '156a', 'answer': 'v'},
      {'test_pics': '164a', 'answer': 'v'},
      {'test_pics': '170a', 'answer': 'v'},
      {'test_pics': '175a', 'answer': 'v'},
      {'test_pics': '182a', 'answer': 'v'},
      {'test_pics': '187a', 'answer': 'v'},
      {'test_pics': '004b', 'answer': 'b'},
      {'test_pics': '007b', 'answer': 'b'},
      {'test_pics': '008b', 'answer': 'b'},
      {'test_pics': '009b', 'answer': 'b'},
      {'test_pics': '010b', 'answer': 'b'},
      {'test_pics': '024b', 'answer': 'b'},
      {'test_pics': '025b', 'answer': 'b'},
      {'test_pics': '029b', 'answer': 'b'}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
    Routine Test
  LoopTerminator Testphase
  Routine Ende_Experiment
